<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q4="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q1="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:GetFiles">
          <q1:Path>C:\Users\taunsquared\Documents\GitHub\SurprisingMinds-Analysis\PythonWithAdam\temp</q1:Path>
          <q1:SearchPattern>*world.avi</q1:SearchPattern>
          <q1:SearchOption>AllDirectories</q1:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Concat" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="RepeatCount">
                <Count>1</Count>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WindowWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="q1:CsvWriter">
              <q1:FileName>C:\Users\taunsquared\Documents\GitHub\SurprisingMinds-Analysis\PythonWithAdam\temp\2017-10-15_10-21-12\2017-10-15_10-21-12_stimuli025_world_LuminancePerFrame.csv</q1:FileName>
              <q1:Append>false</q1:Append>
              <q1:Overwrite>false</q1:Overwrite>
              <q1:Suffix>None</q1:Suffix>
              <q1:IncludeHeader>false</q1:IncludeHeader>
              <q1:Selector>Source.Item1,Source.Item2</q1:Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="q1:CsvReader">
              <q1:FileName>C:\Users\taunsquared\Documents\GitHub\SurprisingMinds-Analysis\PythonWithAdam\temp\2017-10-15_09-18-14\2017-10-15_09-18-14_stimuli026_world.csv</q1:FileName>
              <q1:SkipRows>0</q1:SkipRows>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Val0</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Filename</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:Sum" />
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>@returns(str)
def process(value):
  global output
  import os
  L = len(value)-4
  current_dir = os.getcwd()
  luminance_dir = os.path.join(current_dir, "LuminancePerFrame")
  file_name = value[0:L] + "_LuminancePerFrame.csv"
  output = os.path.join(luminance_dir, file_name)
  return output</q3:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:Grayscale" />
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfStringCsvReader">
              <MemberName>FileName</MemberName>
              <Name>OutputFileName</Name>
              <Value>C:\Users\taunsquared\Documents\GitHub\SurprisingMinds-Analysis\PythonWithAdam\temp\2017-10-15_13-16-48\2017-10-15_13-16-48_stimuli026_world.csv</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:FileCapture">
                <q4:FileName>C:\Users\taunsquared\Documents\GitHub\SurprisingMinds-Analysis\PythonWithAdam\temp\2017-10-15_09-18-14\2017-10-15_09-18-14_stimuli026_world.avi</q4:FileName>
                <q4:PlaybackRate>0</q4:PlaybackRate>
                <q4:StartPosition>0</q4:StartPosition>
                <q4:PositionUnits>Frames</q4:PositionUnits>
                <q4:Loop>false</q4:Loop>
                <q4:Playing>true</q4:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfStringFileCapture">
              <MemberName>FileName</MemberName>
              <Name>VideoFileName</Name>
              <Value />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Filename</Name>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Filename</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfStringCsvReader">
              <MemberName>FileName</MemberName>
              <Name>VideoCSVFileName</Name>
              <Value>C:\Users\taunsquared\Documents\GitHub\SurprisingMinds-Analysis\PythonWithAdam\temp\2017-10-15_13-16-48\2017-10-15_13-16-48_stimuli026_world.csv</Value>
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>@returns(str)
def process(value):
  global output
  L = len(value)-4
  output = value[0:L] + ".csv"
  return output</q3:Script>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Filename</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>14</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>2</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>15</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>16</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Reactive.Concat, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.GetFiles, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.RepeatCount, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvReader, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Sum, Bonsai.Dsp, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.CsvReader, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FileCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Vision.FileCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>